%include '../includes/BitOutputWordInput.inc'


iodevice/datapixx datapixx (
    update_interval = 3ms
    ) {
    iochannel/datapixx_bit_output (
        bit_number = 18
        value = bit0
        use_input_port = true
        )
    iochannel/datapixx_bit_output (
        bit_number = 12
        value = bit1
        use_input_port = true
        )
    iochannel/datapixx_bit_output (
        bit_number = 6
        value = bit2
        use_input_port = true
        )
    iochannel/datapixx_bit_output (
        bit_number = 0
        value = bit3
        use_input_port = true
        )
    iochannel/datapixx_word_input (
        bit_numbers = 5,11,17,23
        value = word
        )
}
