var word = 0 {
    report ('word = $word')
}

var bit0 = false {
    report ('bit0 = $bit0')
}

var bit1 = false {
    report ('bit1 = $bit1')
}

var bit2 = false {
    report ('bit2 = $bit2')
}

var bit3 = false {
    report ('bit3 = $bit3')
}


iodevice/datapixx datapixx (
    update_interval = 3ms
    enable_dout_din_loopback = true
    ) {
    iochannel/datapixx_word_output (
        bit_numbers = 12, 7:9
        value = word
        )
    iochannel/datapixx_bit_input (
        bit_number = 12
        value = bit0
        )
    iochannel/datapixx_bit_input (
        bit_number = 7
        value = bit1
        )
    iochannel/datapixx_bit_input (
        bit_number = 8
        value = bit2
        )
    iochannel/datapixx_bit_input (
        bit_number = 9
        value = bit3
        )
}


var index = 0

%define output_bits = [[0,0,0,0,0],
                       [1,0,0,0,0],
                       [0,1,0,0,0],
                       [0,0,1,0,0],
                       [0,0,0,1,0],
                       [1,1,1,1,0],
                       [0,0,0,0,1]]

%define update_word ()
    index += 1
    word = (output_bits[index][0] * 1 +
            output_bits[index][1] * 2 +
            output_bits[index][2] * 4 +
            output_bits[index][3] * 8 +
            output_bits[index][4] * 16)
%end

%define wait_and_assert ()
    wait (1s)
    assert (bit0 == output_bits[index][0])
    assert (bit1 == output_bits[index][1])
    assert (bit2 == output_bits[index][2])
    assert (bit3 == output_bits[index][3])
%end


protocol {
    index = -1
    update_word ()

    block (nsamples = 6) {
        bit0 = !(output_bits[index][0])
        bit1 = !(output_bits[index][1])
        bit2 = !(output_bits[index][2])
        bit3 = !(output_bits[index][3])

        report ('Starting device')
        start_io_device (datapixx)

        wait_and_assert ()

        update_word ()

        wait_and_assert ()

        report ('Stopping device')
        stop_io_device (datapixx)
    }
}
